PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Experiment info = {'participant': '', 'session': '001'}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = chinese_cond1
  Screen = 1
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Routines
  Routine Finish
    TextComponent text_5
      color = black
      text = Thank you for participating!
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent text_6
      color = black
      text = You will now complete the survey portion of the experiment
      stopVal [duration (s)] = 6
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_7
      color = black
      text = An experimenter will come by to assist you
      stopVal [duration (s)] = 6
      startVal [time (s)] = 12
      letterHeight = 0.1
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  Routine feedback
    TextComponent text_2
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Each Frame:
        if bookClock.getTime() > 480:
            trials.finished=True
            book.stop()
  Routine instr
    TextComponent text_8
      color = black
      text = Welcome!
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      color = black
      text = In this experiment you will complete a word matching task.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 3
      letterHeight = 0.1
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    TextComponent text_10
      color = black
      text = In the task, you will see a series of pictures paired with words.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 9
      letterHeight = 0.1
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    TextComponent text_13
      color = black
      text = Each pair will look like this.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 15
      letterHeight = 0.1
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  Routine audiobook_1
    CodeComponent code_3
      Begin Experiment:
        globalClock = core.MonotonicClock()
        matchClock = core.Clock()
        bookClock = core.Clock()

        msg='doh!'#if this comes up we forgot to update the msg!

        myCount = 0
      Begin Routine:
        bookClock.reset()
        thisExp.addData('begin_book', globalClock.getTime())

        book = sound.Sound(sounds)
        book.play()

        myCount = myCount + 1
    TextComponent text_3
      color = black
      text = The matching task will begin soon
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine b'feedback_prac_2'
    TextComponent text_19
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
  Routine match_prac2
  Routine match_prac1
    ImageComponent image_2
      stopVal [duration (s)] = 3
      pos = [-200, 0]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = [300, 300]
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    TextComponent text_12
      color = black
      text [set every repeat] = $name
      stopVal [duration (s)] = 3
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
  Routine feedback_prac
  Routine end_loop
    TextComponent text_4
      color = black
      text = This round is now complete
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
  Routine match
    ImageComponent image
      stopVal [duration (s)] = 3.0
      pos = [-200, 0]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size [set every repeat] = [300,300]
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    TextComponent text
      color = black
      text [set every repeat] = $name
      stopVal [duration (s)] = 3.0
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        matchClock.reset()
        thisExp.addData('begin_global', globalClock.getTime())
        thisExp.addData('begin_routine', matchClock.getTime())
      End Routine:
        thisExp.addData('end_global', globalClock.getTime())
        thisExp.addData('end_routine', matchClock.getTime())

        if not key_resp_1.keys :
            msg="Failed to respond"
        elif key_resp_1.corr :#stored on last run routine
            msg="Correct!"
        else:
            msg="Wrong."
    KeyboardComponent key_resp_1
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3.0
      forceEndRoutine = True
      allowedKeys = 'z','x'
      startVal [time (s)] = 0.0
      store = first key
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  Routine match_2
    ImageComponent image_3
      stopVal [duration (s)] = 3.0
      pos = [-200, 0]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = [300,300]
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    TextComponent text_18
      color = black
      text [set every repeat] = $name
      stopVal [duration (s)] = 3.0
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        matchClock.reset()
        thisExp.addData('begin_global', globalClock.getTime())
        thisExp.addData('begin_routine', matchClock.getTime())
      End Routine:
        thisExp.addData('end_global', globalClock.getTime())
        thisExp.addData('end_routine', matchClock.getTime())

        if not key_resp_2.keys :
            msg="Failed to respond"
        elif key_resp_2.corr :#stored on last run routine
            msg="Correct!"
        else:
            msg="Wrong."
    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3.0
      forceEndRoutine = True
      allowedKeys = 'z','x'
      startVal [time (s)] = 0.0
      store = first key
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  Routine instr_2
    TextComponent text_14
      color = black
      text = Each pair will be either a correct or incorrect match.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_15
      color = green
      text = You should press "z" if the match is correct.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_16
      color = red
      text = You should press "x" if the match is incorrect.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 12
      letterHeight = 0.1
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    TextComponent text_17
      color = black
      text = Let's do a practice round.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 18
      letterHeight = 0.1
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  Routine instr_3
    TextComponent text_20
      color = black
      text = Great job!
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_22
      color = black
      text = During the matching task you will also listen to an audiobook.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 6
      letterHeight = 0.1
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    TextComponent text_21
      color = black
      text = The audiobook will either be in English or in Mandarin Chinese.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 12
      letterHeight = 0.1
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    TextComponent text_23
      color = black
      text = Pay attention to the audiobook, because you will be asked questions about it later.
      stopVal [duration (s)] = 8
      startVal [time (s)] = 18
      letterHeight = 0.1
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    TextComponent text_24
      color = black
      text = Okay! Let's get going.
      stopVal [duration (s)] = 6
      startVal [time (s)] = 26
      letterHeight = 0.1
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Flow
  Routine instr
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = random
    nReps = 1
    Selected rows = [2]
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    conditions:
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      OrderedDict([(u'images', u'images/cocktailshrimp01.jpg'), (u'name', u'cocktail shrimp'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/candy.jpg'), (u'name', u'candy'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/apricot.jpg'), (u'name', u'apricot'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/basketball01.jpg'), (u'name', u'basket ball'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/battery03b.jpg'), (u'name', u'battery'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/graduationcap.jpg'), (u'name', u'graduation cap'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/razor04a.jpg'), (u'name', u'razor'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/radio03a.jpg'), (u'name', u'radio'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/spoon02b.jpg'), (u'name', u'spoon'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/croissant02b.jpg'), (u'name', u'croissant'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/licenseplate.jpg'), (u'name', u'license plate'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/pictureframe04.jpg'), (u'name', u'picture frame'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/lollipop03b.jpg'), (u'name', u'lollipop'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/ashtray02b.jpg'), (u'name', u'ashtray'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/lion.jpg'), (u'name', u'lion'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/fryingpan01.jpg'), (u'name', u'frying pan'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/blueberry02.jpg'), (u'name', u'blueberry'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/plant01.jpg'), (u'name', u'plant'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/dreamcatcher.jpg'), (u'name', u'dream catcher'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/table02.jpg'), (u'name', u'table'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/seagull.jpg'), (u'name', u'seagull'), (u'corrAns', u'z')]),
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    Routine match_prac1
  LoopTerminator trials_3
  Routine instr_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = random
    nReps = 1
    Selected rows = [4]
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    conditions:
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      OrderedDict([(u'images', u'images/cocktailshrimp01.jpg'), (u'name', u'cocktail shrimp'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/candy.jpg'), (u'name', u'candy'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/apricot.jpg'), (u'name', u'apricot'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/basketball01.jpg'), (u'name', u'basket ball'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/battery03b.jpg'), (u'name', u'battery'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/graduationcap.jpg'), (u'name', u'graduation cap'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/razor04a.jpg'), (u'name', u'razor'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/radio03a.jpg'), (u'name', u'radio'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/spoon02b.jpg'), (u'name', u'spoon'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/croissant02b.jpg'), (u'name', u'croissant'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/licenseplate.jpg'), (u'name', u'license plate'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/pictureframe04.jpg'), (u'name', u'picture frame'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/lollipop03b.jpg'), (u'name', u'lollipop'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/ashtray02b.jpg'), (u'name', u'ashtray'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/lion.jpg'), (u'name', u'lion'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/fryingpan01.jpg'), (u'name', u'frying pan'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/blueberry02.jpg'), (u'name', u'blueberry'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/plant01.jpg'), (u'name', u'plant'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/dreamcatcher.jpg'), (u'name', u'dream catcher'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/table02.jpg'), (u'name', u'table'), (u'corrAns', u'z')]),
      OrderedDict([(u'images', u'images/seagull.jpg'), (u'name', u'seagull'), (u'corrAns', u'z')]),
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    Routine match_2
  LoopTerminator trials_4
  Routine instr_3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sounds.xlsx
    loopType = random
    nReps = 1
    Selected rows = [1,3]
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    Routine audiobook_1
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = images.xlsx
      loopType = random
      nReps = 5
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      conditions:
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        OrderedDict([('images', 'images/cocktailshrimp01.jpg'), ('name', 'cocktail shrimp'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/candy.jpg'), ('name', 'candy'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/apricot.jpg'), ('name', 'apricot'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/basketball01.jpg'), ('name', 'basket ball'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/battery03b.jpg'), ('name', 'battery'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/graduationcap.jpg'), ('name', 'graduation cap'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/razor04a.jpg'), ('name', 'razor'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/radio03a.jpg'), ('name', 'radio'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/spoon02b.jpg'), ('name', 'spoon'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/croissant02b.jpg'), ('name', 'croissant'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/licenseplate.jpg'), ('name', 'license plate'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/pictureframe04.jpg'), ('name', 'picture frame'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/lollipop03b.jpg'), ('name', 'lollipop'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/ashtray02b.jpg'), ('name', 'ashtray'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/lion.jpg'), ('name', 'lion'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/fryingpan01.jpg'), ('name', 'frying pan'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/blueberry02.jpg'), ('name', 'blueberry'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/plant01.jpg'), ('name', 'plant'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/dreamcatcher.jpg'), ('name', 'dream catcher'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/table02.jpg'), ('name', 'table'), ('corrAns', 'z')]),
        OrderedDict([('images', 'images/seagull.jpg'), ('name', 'seagull'), ('corrAns', 'z')]),
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      Routine match
      Routine feedback
    LoopTerminator trials
    Routine end_loop
  LoopTerminator trials_2
  Routine Finish
